PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': 'test', 'taskVer': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = tworatesteps
  exportHTML = on Save
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Routines
  Routine testTrial
    TextComponent testText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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      text:
        Any text

        including line breaks
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        testText.text = str(trialNum) + "\n" + str(phase)
  Routine setup
    TextComponent setupText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Use Mouse. Space continue
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    KeyboardComponent setupResp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent JScodeFix
      Code Type = Auto->JS
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    CodeComponent selectionCode
      Code Type = Both
      Begin Experiment:
        # Do error checking for correct values of taskVer
        try:
            taskVer = int(expInfo['taskVer']) # Check to see if this is safe
        except ValueError:
            taskVer = 0

        # variable to keep track of the trial number
        trialNum = 0

        # Variables to keep track of the order, rotation and target choices
        orderChoice = taskVer % 6
        rotationChoice = np.floor( taskVer / 12 ) % 2
        targetChoice = np.floor( taskVer / 6) % 2

        # Order
        order = [0,1,2] # Default choice
        if (orderChoice == 0):
            order = [0,1,2]
        elif (orderChoice == 1):
            order = [0,1,3]
        elif (orderChoice == 2):
            order = [0,2,1]
        elif (orderChoice == 3):
            order = [0,2,3]
        elif (orderChoice == 4):
            order = [0,3,1]
        elif (orderChoice == 5):
            order = [0,3,2]

        # Rotation of the mouse angle
        rotation = [1,-1] # Default choice
        if (rotationChoice == 0):
            rotation = [1,-1]
        elif (rotationChoice == 1):
            rotation = [-1,1]

        # Choose set of angles for Main and Inverted task, respectively
        targetAngles = [[40,50,130,140],[40,50],[130,140]] # Default choice
        if (targetChoice == 0):
            targetAngles = [[40,50,130,140],[40,50],[130,140]]
        elif (targetChoice == 1):
            targetAngles = [[40,50,130,140],[130,140],[40,50]]

        ang = None
        rtd = None

        #Set up rotations and main tasks
        # NOTE: JS isn't automatically converted with global keyword
        def setAbruptMainTask():
            print('Abrupt Main Task')
            global ang
            global rtd
            ang = rotation[0] * 30
            rtd = ang*(pi/180)

        def setRampedMainTask():
            print('Ramped Main Task')
            global ang
            global rtd
            if (trialsLoop.thisN <= 47):
                ang = rotation[0] * (trialsLoop.thisN+1)*0.625
            else:
                ang = rotation[0] * 30
            rtd = ang*(pi/180)

        def setStepMainTask():
            print('Step Main Task')
            global ang
            global rtd
            if (trialsLoop.thisN <= 23):
                ang = rotation[0] * 7.5
            elif (trialsLoop.thisN > 23 and trialsLoop.thisN <= 47):
                ang = rotation[0] * 15
            elif (trialsLoop.thisN > 47 and trialsLoop.thisN <= 71):
                ang = rotation[0] * 22.5
            else:
                ang = rotation[0] * 30
            rtd = ang*(pi/180)

        #Set up inverses
        # Might be possible combine these with the Main task functions
        def setAbruptInverseTask():
            print('Abrupt Inverse Task')
            global ang
            global rtd
            ang = rotation[1] * 30
            rtd = ang*(pi/180)

        def setRampedInverseTask():
            print('Ramped Inverse Task')
            global ang
            global rtd
            if (trialsLoop.thisN <= 47):
                ang = rotation[1] * (trialsLoop.thisN+1)*0.625
            else:
                ang = rotation[1] * 30
            rtd = ang*(pi/180)

        def setStepInverseTask():
            print('Step Inverse Task')
            global ang
            global rtd
            if (trialsLoop.thisN <= 23):
                ang = rotation[1] * 7.5
            elif (trialsLoop.thisN > 23 and trialsLoop.thisN <= 47):
                ang = rotation[1] * 15
            elif (trialsLoop.thisN > 47 and trialsLoop.thisN <= 71):
                ang = rotation[1] * 22.5
            else:
                ang = rotation[1] * 30
            rtd = ang*(pi/180)
      Begin JS Experiment:
        taskVer = Number.parseInt(expInfo["taskVer"]);
        if (Number.isNaN(taskVer)) {
            taskVer = 0
        }
        trialNum = 0;
        orderChoice = (taskVer % 6);
        rotationChoice = (Math.floor((taskVer / 12)) % 2);
        targetChoice = (Math.floor((taskVer / 6)) % 2);
        order = [0, 1, 2];
        if ((orderChoice === 0)) {
            order = [0, 1, 2];
        } else {
            if ((orderChoice === 1)) {
                order = [0, 1, 3];
            } else {
                if ((orderChoice === 2)) {
                    order = [0, 2, 1];
                } else {
                    if ((orderChoice === 3)) {
                        order = [0, 2, 3];
                    } else {
                        if ((orderChoice === 4)) {
                            order = [0, 3, 1];
                        } else {
                            if ((orderChoice === 5)) {
                                order = [0, 3, 2];
                            }
                        }
                    }
                }
            }
        }
        rotation = [1, (- 1)];
        if ((rotationChoice === 0)) {
            rotation = [1, (- 1)];
        } else {
            if ((rotationChoice === 1)) {
                rotation = [(- 1), 1];
            }
        }
        targetAngles = [[40, 50, 130, 140], [40, 50], [130, 140]];
        if ((targetChoice === 0)) {
            targetAngles = [[40, 50, 130, 140], [40, 50], [130, 140]];
        } else {
            if ((targetChoice === 1)) {
                targetAngles = [[40, 50, 130, 140], [130, 140], [40, 50]];
            }
        }
        ang = null;
        rtd = null;
        function setAbruptMainTask() {
            console.log("Abrupt Main Task");
            ang = (rotation[0] * 30);
            rtd = (ang * (pi / 180));
        }
        function setRampedMainTask() {
            console.log("Ramped Main Task");
            if ((trialsLoop.thisN <= 47)) {
                ang = ((rotation[0] * (trialsLoop.thisN + 1)) * 0.625);
            } else {
                ang = (rotation[0] * 30);
            }
            rtd = (ang * (pi / 180));
        }
        function setStepMainTask() {
            console.log("Step Main Task");
            if ((trialsLoop.thisN <= 23)) {
                ang = (rotation[0] * 7.5);
            } else {
                if (((trialsLoop.thisN > 23) && (trialsLoop.thisN <= 47))) {
                    ang = (rotation[0] * 15);
                } else {
                    if (((trialsLoop.thisN > 47) && (trialsLoop.thisN <= 71))) {
                        ang = (rotation[0] * 22.5);
                    } else {
                        ang = (rotation[0] * 30);
                    }
                }
            }
            rtd = (ang * (pi / 180));
        }
        function setAbruptInverseTask() {
            console.log("Abrupt Inverse Task");
            ang = (rotation[1] * 30);
            rtd = (ang * (pi / 180));
        }
        function setRampedInverseTask() {
            console.log("Ramped Inverse Task");
            if ((trialsLoop.thisN <= 47)) {
                ang = ((rotation[1] * (trialsLoop.thisN + 1)) * 0.625);
            } else {
                ang = (rotation[1] * 30);
            }
            rtd = (ang * (pi / 180));
        }
        function setStepInverseTask() {
            console.log("Step Inverse Task");
            if ((trialsLoop.thisN <= 23)) {
                ang = (rotation[1] * 7.5);
            } else {
                if (((trialsLoop.thisN > 23) && (trialsLoop.thisN <= 47))) {
                    ang = (rotation[1] * 15);
                } else {
                    if (((trialsLoop.thisN > 47) && (trialsLoop.thisN <= 71))) {
                        ang = (rotation[1] * 22.5);
                    } else {
                        ang = (rotation[1] * 30);
                    }
                }
            }
            rtd = (ang * (pi / 180));
        }
  Routine instruction
    TextComponent instructionText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $taskVersion
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    KeyboardComponent instructionResp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent endText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = thank you
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  Routine trial
    MouseComponent trialMouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent cursorCode
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False

        print(taskLoop.thisN)
        print(trialsLoop.thisN % 4)

        # taskLoop.thisN refers to the outer loop - can be used to keep track of which loop we're on instead of using
        # loopCount
        if taskLoop.thisN == 0:
            targetangle = targetAngles[taskLoop.thisN][trialsLoop.thisN % 4] # targetAngles defined in instruction1
        else:
            targetangle = targetAngles[taskLoop.thisN][trialsLoop.thisN % 2]

        targetangle_rad = pi*(targetangle/180)
        targetPos = (cos(targetangle_rad)*0.4, sin(targetangle_rad)*0.4)

        homePos = [0, 0]

        targetOpacity = 0
        homeOpacity = 0
        #'buffer' circle set up
        bufferOpacity = 0
        bufferRadius = 0
        #allows cursor opacity changing
        cursorOpacity = 1
        cursorPosX = trialMouse.getPos()[0]
        cursorPosY = trialMouse.getPos()[1]

        homeStart = False
        reachOut = False

        trialStep = 1
        steps = []

        #print('trial: '+str(trials1.thisN)+' ('+str(globalClock.getTime())+')')
        trialText.text = str(trialsLoop.thisN+1)

        if phase == 'Align':
            print("Align task")

            trialCursor.pos = (1.5,1.5)
            trialMouse.pos = (1.5,1.5)
        elif phase == 'Error Clamped':
            print('Error Clamped Task')

            cursorOpacity = 0

            trialCursor.pos = (1.5,1.5)
            trialMouse.pos = (1.5,1.5)

            theta = (targetangle / 180) * pi
        elif (phase == 'Rotated'):
            trialCursor.pos = (1.5,1.5)
            trialMouse.pos = (1.5,1.5)

            if (taskVersion == 'Abrupt'):
                setAbruptMainTask()
            elif (taskVersion == 'Ramped'):
                setRampedMainTask()
            elif (taskVersion == 'Stepped'):
                setStepMainTask()
            else:
                setAbruptMainTask() # Contingency condition don't know if this is needed

        elif (phase == 'Inverted'):
            if (taskVersion == 'Abrupt'):
                setAbruptInverseTask()
            elif (taskVersion == 'Ramped'):
                setRampedInverseTask()
            elif (taskVersion == 'Stepped'):
                setStepInverseTask()
            else:
                setAbruptInverseTask() # Contingency condition don't know if this is needed

        #    trialText.text = str(ang)
        else:
            print("Align task")

            trialCursor.pos = (1.5,1.5)
            trialMouse.pos = (1.5,1.5)

        # Show the current angle on screen
        showAngle.text = str(ang)

        # Defined in setup
        thisExp.addData('trialNum', trialNum)
        trialNum = trialNum + 1
        thisExp.addData('angle', ang)
        if taskLoop.thisN != 0:
            thisExp.addData('rotationMultiplier', rotation[taskLoop.thisN-1])
        else:
            thisExp.addData('rotationMultiplier', 1)
      Each Frame:
        CursorTargetDistance = sqrt((trialCursor.pos[0]-trialTarget.pos[0])**2 + (trialCursor.pos[1]-trialTarget.pos[1])**2)
        CursorHomeDistance = sqrt(trialCursor.pos[0]**2 + trialCursor.pos[1]**2)

        steps.append(trialStep)
        # steps.push(step)

        if phase == 'Align':
            cursorPosX = trialMouse.getPos()[0]
            cursorPosY = trialMouse.getPos()[1]

            if not(homeStart):
                homeOpacity = 1
                targetOpacity = 0
                cursorOpacity = 1
                bufferOpacity = 0
                trialStep = 1
                if (CursorHomeDistance < .05):
                    homeStart = True
                    print('end step 1'+' ('+str(globalClock.getTime())+')')

            if (not(reachOut) and homeStart):
                homeOpacity = 0
                targetOpacity = 1
                cursorOpacity = 1
                bufferOpacity = 0
                trialStep = 2
                if (CursorTargetDistance < .05):
                    reachOut = True
                    print('end step 2'+' ('+str(globalClock.getTime())+')')

            if (reachOut):
                homeOpacity = 1
                targetOpacity = 0
                cursorOpacity = 1
                bufferOpacity = 0
                trialStep = 3
                if (CursorHomeDistance < .05):
                    # maybe this ends the loop prematurely?
                    print('end step 3'+' ('+str(globalClock.getTime())+')')
                    continueRoutine = False

            #steps = steps.append(step)
        elif phase == 'Error Clamped':
            cursorPosX = sqrt((trialMouse.getPos()[0]**2)+(trialMouse.getPos()[1]**2))*(np.cos(theta))
            cursorPosY = sqrt((trialMouse.getPos()[0]**2)+(trialMouse.getPos()[1]**2))*(np.sin(theta))

            if not(homeStart):
                homeOpacity = 1
                targetOpacity = 0
                trialStep = 1
                bufferOpacity = 1
                bufferRadius = 2*(sqrt(trialCursor.pos[0]**2 + trialCursor.pos[1]**2))
                cursorOpacity = 0
                if (CursorHomeDistance < .2):
                    cursorOpacity = 1
                if (CursorHomeDistance < .075):
                    homeStart = True
                    print('end step 1'+' ('+str(globalClock.getTime())+')')

            if (not(reachOut) and homeStart):
                homeOpacity = 0
                targetOpacity = 1
                trialStep = 2
                bufferOpacity = 0
                cursorOpacity = 1
                if (CursorTargetDistance < .025):
                    reachOut = True
                    print('end step 2'+' ('+str(globalClock.getTime())+')')

            if (reachOut):
                homeOpacity = 1
                targetOpacity = 0
                trialStep = 3
                #COntrols the 'buffer'
                bufferOpacity = 1
                bufferRadius = 2*(sqrt(trialCursor.pos[0]**2 + trialCursor.pos[1]**2))
                #controls the cursor
                cursorOpacity = 0
                if (CursorHomeDistance < .2):
                    cursorOpacity = 1
                if (CursorHomeDistance < .075):
                    # maybe this ends the loop prematurely?
                    print('end step 3'+' ('+str(globalClock.getTime())+')')
                    continueRoutine = False

            #steps = steps.append(step)
        elif (phase == 'Rotated' or phase == 'Inverted'):
            cursorPosX = (trialMouse.getPos()[0] * np.cos(rtd))-(trialMouse.getPos()[1] * np.sin(rtd))
            cursorPosY = (trialMouse.getPos()[0] * np.sin(rtd))+(trialMouse.getPos()[1] * np.cos(rtd))

            if not(homeStart):
                homeOpacity = 1
                targetOpacity = 0
                cursorOpacity = 1
                bufferOpacity = 0
                trialStep = 1
                if (CursorHomeDistance < .05):
                    homeStart = True
                    print('end step 1'+' ('+str(globalClock.getTime())+')')

            if (not(reachOut) and homeStart):
                homeOpacity = 0
                targetOpacity = 1
                cursorOpacity = 1
                bufferOpacity = 0
                trialStep = 2
                if (CursorTargetDistance < .05):
                    reachOut = True
                    print('end step 2'+' ('+str(globalClock.getTime())+')')

            if (reachOut):
                homeOpacity = 1
                targetOpacity = 0
                cursorOpacity = 1
                bufferOpacity = 0
                trialStep = 3
                if (CursorHomeDistance < .05):
                    # maybe this ends the loop prematurely?
                    print('end step 3'+' ('+str(globalClock.getTime())+')')
                    continueRoutine = False

            #steps = steps.append(step)
        else:
            cursorPosX = trialMouse.getPos()[0]
            cursorPosY = trialMouse.getPos()[1]

            if not(homeStart):
                homeOpacity = 1
                targetOpacity = 0
                cursorOpacity = 1
                bufferOpacity = 0
                trialStep = 1
                if (CursorHomeDistance < .05):
                    homeStart = True
                    print('end step 1'+' ('+str(globalClock.getTime())+')')

            if (not(reachOut) and homeStart):
                homeOpacity = 0
                targetOpacity = 1
                cursorOpacity = 1
                bufferOpacity = 0
                trialStep = 2
                if (CursorTargetDistance < .05):
                    reachOut = True
                    print('end step 2'+' ('+str(globalClock.getTime())+')')

            if (reachOut):
                homeOpacity = 1
                targetOpacity = 0
                cursorOpacity = 1
                bufferOpacity = 0
                trialStep = 3
                if (CursorHomeDistance < .05):
                    # maybe this ends the loop prematurely?
                    print('end step 3'+' ('+str(globalClock.getTime())+')')
                    continueRoutine = False

            #steps = steps.append(step)
      End Routine:
        # thisExp.addData('step', stepvector)
        # reset the angles for the next task
        ang = None
        rtd = None
        thisExp.addData('step', steps)
        thisExp.addData('targetangle_deg', targetangle)

        # psychoJS.experiment.addData('columnName', variable)
        #psychoJS.experiment.addData('step', steps)
        #psychoJS.experiment.addData('targetangle_deg', targetangle)
    PolygonComponent trialTarget
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacity
      pos [set every frame] = targetPos
      saveStartStop = False
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialHome
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = homeOpacity
      pos [set every frame] = (0, 0)
      saveStartStop = False
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialCursor
      fillColor = $[0,0,0]
      lineColor = $[-1.000,-1.000,-1.000]
      nVertices = 180
      opacity [set every frame] = cursorOpacity
      pos [set every frame] = [cursorPosX, cursorPosY]
      saveStartStop = False
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    VariableComponent trialStep
      saveStartStop = False
      startExpValue = 0
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    TextComponent trialText
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent testSkip
      allowedKeys = 'q','w','e','r','t','y','u','i','o','p','a','s','d','f','g','h','j','k','l','z','x','c','v','b','n','m'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent trialBuff
      fillColor = $[0,0,0]
      lineColor = $[-1.000,-1.000,-1.000]
      nVertices = 180
      opacity [set every frame] = bufferOpacity
      pos [set every frame] = homePos
      saveStartStop = False
      shape = regular polygon...
      size [set every frame] = bufferRadius
      startVal [time (s)] = 0.0
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    TextComponent showAngle
      letterHeight = 0.1
      pos = (-0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $ang
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Flow
  Routine setup
  LoopInitiator taskLoop loopType="TrialHandler"
    Selected rows = $order
    conditionsFile = taskConds.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'famConds.xlsx'), ('taskVersion', 'Familiarization'), ('taskReps', 24)]),
      OrderedDict([('condsFile', 'mainConds.xlsx'), ('taskVersion', 'Abrupt'), ('taskReps', 160)]),
      OrderedDict([('condsFile', 'mainConds.xlsx'), ('taskVersion', 'Ramped'), ('taskReps', 160)]),
      OrderedDict([('condsFile', 'mainConds.xlsx'), ('taskVersion', 'Stepped'), ('taskReps', 160)])]
    Routine instruction
    LoopInitiator trialsLoop loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator trialsLoop
  LoopTerminator taskLoop
  Routine end
